CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "GCX_A_Proj")
    Name to assign these images:GCX_A
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Nuc_A_Proj")
    Name to assign these images:Nuc_A
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GCX_B_Proj")
    Name to assign these images:GCX_B
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Nuc_B_Proj")
    Name to assign these images:Nuc_B
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:GCX_A
    Name the primary objects to be identified:Apical_GCX
    Typical diameter of objects, in pixel units (Min,Max):35,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:.06
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:GCX_B
    Name the primary objects to be identified:Basal_GCX
    Typical diameter of objects, in pixel units (Min,Max):15,1000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:.08
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
SplitOrMergeObjects:[module_num:7|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
    Select the input objects:Apical_GCX
    Name the new objects:Comb_Apical_GCX
    Operation:Merge
    Maximum distance within which to merge objects:2000
    Merge using a grayscale image?:No
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    Merging method:Distance
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
SplitOrMergeObjects:[module_num:8|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
    Select the input objects:Basal_GCX
    Name the new objects:Comb_Basal_GCX
    Operation:Merge
    Maximum distance within which to merge objects:2000
    Merge using a grayscale image?:No
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    Merging method:Distance
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
MeasureImageAreaOccupied:[module_num:9|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
    Measure the area occupied by:Objects
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    Select object sets to measure:Comb_Apical_GCX, Comb_Basal_GCX

MeasureObjectIntensity:[module_num:10|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
    Select images to measure:GCX_B
    Select objects to measure:Comb_Basal_GCX

MeasureObjectIntensity:[module_num:11|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
    Select images to measure:GCX_A
    Select objects to measure:Comb_Apical_GCX

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|C:\\Users\\zvitt\\Desktop\\Paper Data\\output 12 p
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|AreaOccupied_AreaOccupied_Comb_Apical_GCX,Image|AreaOccupied_AreaOccupied_Comb_Basal_GCX,Comb_Apical_GCX|Intensity_IntegratedIntensity_GCX_A,Comb_Basal_GCX|Intensity_IntegratedIntensity_GCX_B
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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