CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "A_Orth")
    Name to assign these images:Apical
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "B_Orth")
    Name to assign these images:Basal
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Apical
    Name the primary objects to be identified:Apical
    Typical diameter of objects, in pixel units (Min,Max):8,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:3
    Threshold correction factor:0.85
    Lower and upper bounds on threshold:0.0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Basal
    Name the primary objects to be identified:Basal
    Typical diameter of objects, in pixel units (Min,Max):6,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:Apical, Basal
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

CalculateMath:[module_num:8|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
    Name the output measurement:ApicalLength
    Operation:Subtract
    Select the minuend measurement type:Object
    Select the minuend objects:Apical
    Select the minuend measurement:AreaShape_BoundingBoxMaximum_Y
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Object
    Select the subtrahend objects:Apical
    Select the subtrahend measurement:AreaShape_BoundingBoxMinimum_Y
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.1
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:9|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
    Name the output measurement:BasalLength
    Operation:Subtract
    Select the minuend measurement type:Object
    Select the minuend objects:Basal
    Select the minuend measurement:AreaShape_BoundingBoxMaximum_Y
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Object
    Select the subtrahend objects:Basal
    Select the subtrahend measurement:AreaShape_BoundingBoxMinimum_Y
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.1
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|C:\\Users\\zvitt\\Desktop\\Paper Data\\output 12 p\\thickness
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Apical|Math_ApicalLength,Basal|Math_BasalLength
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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